<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SynchPulse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:SynchronizeTimestamp" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                <beh:OutputPulseEnable>None</beh:OutputPulseEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>SynchronizerCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Timestamp</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimeStamp</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>2</p1:Lower>
                      <p1:Upper>5</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT4.183S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchPulse</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Int64">
              <rx:Name>SynchPulse</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DO0</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchronizerCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DO0</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchronizerCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>subjectid.csv</io:FileName>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SubjectID" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Description>Log all relevant streams</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
              <Property Name="SubjectID" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PathPrefix.bonsai">
              <Path>C:\Data\imova\typing</Path>
              <SubjectID>CMD998</SubjectID>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>None</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it as key,
true as pressed)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyUp">
                <wie:Filter>None</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it as key,
false as pressed)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>keystrokes.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\typing\bla2\2025-10-25T13-34-13\keystrokes.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Text</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>!String.IsNullOrEmpty(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToLiteral" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>text.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\typing\bla2\2025-10-25T13-34-13\text.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>text_input_start.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\typing\bla2\2025-10-25T13-34-13\text_input_start.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToLiteral" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>Instructions.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\typing\bla2\2025-10-25T13-34-13\Instructions.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>TaskEvents.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\microphone\CMD084\2025-10-15T10-27-18\Instructions.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:Defer">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>\</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="DeviceName" />
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>Behavior</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>\</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceFolderName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceFolderName</Name>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>device.yml</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceYamlFilename</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceFolderName</Name>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>Behavior</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>BinaryFilename</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="DeviceEvents" Description="TaskControlBehaviorEvents" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SynchronizerEvents</Name>
                        </Expression>
                        <Expression xsi:type="rx:GroupBy">
                          <rx:KeySelector>Address</rx:KeySelector>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>LogRegisters</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Register</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>BinaryFilename</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Register</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}_{1}.bin</Format>
                                <Selector>Item1,Item2</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>LogName</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Register</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LogName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:MessageWriter">
                                  <harp:FileName>C:\Data\imova\typing\CMD198\2025-10-21T09-09-03\Behavior\Behavior_35.bin</harp:FileName>
                                  <harp:Suffix>None</harp:Suffix>
                                  <harp:Buffered>true</harp:Buffered>
                                  <harp:Overwrite>false</harp:Overwrite>
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="13" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Path" DisplayName="DeviceYamlFile" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:ReadAllText">
                            <io:Path>BehaviorBoard.yml</io:Path>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceYamlFilename</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:WriteAllText">
                            <io:Path>C:\Data\imova\typing\CMD198\2025-10-21T09-09-03\Behavior\device.yml</io:Path>
                            <io:Overwrite>false</io:Overwrite>
                            <io:Append>false</io:Append>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="23" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="18" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="29" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Subjects</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Init</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TaskEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CountDown</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 24pt</gui:Font>
              <gui:Text>Please type ...

Today is a sunny day!
Today is a sunny day!
Today is a sunny day!
Today is a sunny day!
Today is a sun ...</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:TextBoxAutoFocusBuilder">
              <p2:Enabled>false</p2:Enabled>
              <p2:Visible>false</p2:Visible>
              <p2:Font>Microsoft Sans Serif, 24pt</p2:Font>
              <p2:Text>Today is a sunny day!
Today is a sunny day1
</p2:Text>
              <p2:Multiline>true</p2:Multiline>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Text</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CountDown</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50.1000023pt</gui:Font>
              <gui:Text>11</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>100</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Width>300</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Start</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50pt, style=Bold</gui:Font>
              <gui:Text>Start</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Repeat</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50pt, style=Bold</gui:Font>
              <gui:Text>Repeat</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Repeat</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Next</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50pt, style=Bold</gui:Font>
              <gui:Text>Next</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Next</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 40pt</gui:Font>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>3</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="40" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="19" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="40" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="38" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="36" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source3" />
            <Edge From="40" To="41" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size>
          <ui:Width>100</ui:Width>
          <ui:Height>100</ui:Height>
        </ui:Size>
        <ui:WindowState>Maximized</ui:WindowState>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Instruction</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Instructions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Now please can you type the phrase 

'Today is a sunny day!'

If you finish the phrase, press return to start a new line. 

Each phrase starts with a capital letter and ends with an exclamation mark! 

You can edit your typing.  You have half a minute to type as quickly as you can, as accurately as you can.

Touch 'Start' on the screen to begin!</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Event" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Instruction1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TaskEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TypingTask</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Time(s)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item2-it.Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CountDown</Name>
            </Expression>
            <Expression xsi:type="rx:TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Instructions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Please type ...

Today is a sunny day!
Today is a sunny day!
Today is a sunny day!
Today is a sunny day!
Today is a sun ...</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Event" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>TypingTask</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TaskEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>End?_Repeat?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Chose Repeat or Next Task</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Event" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>EndRepeat</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TaskEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableTextBox</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Repeat</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Finish</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Next</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>