WorkflowBuilder(Version=2.9.0)
GroupWorkflow SynchPulse
    Timer(DueTime=PT1S)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> Take(Count=1) => #2
    BehaviorSubject<Bonsai.Harp.HarpMessage> SynchronizerCommands
    -> DelaySubscription(DueTime=PT1S) => #4
    #2, #4 -> Concat => #5
    ExternalizedMapping(PortName) => #6
    #5, #6 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject SynchronizerEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject TimeStamp

    ExternalizedMapping(Lower, Upper)
    -> Defer
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT4.517S)
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject SynchPulse

    PublishSubject<System.Int64> SynchPulse
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> MulticastSubject SynchronizerCommands => #17
    ExternalizedMapping(DueTime) => #18
    #17, #18 -> Delay(DueTime=PT0.01S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> MulticastSubject SynchronizerCommands

Bonsai.IO.CsvReader(FileName=subjectid.csv, SkipRows=0)
-> Take(Count=1)
-> PropertyMapping(SubjectID)
-> GroupWorkflow Logging(Description="Log all relevant streams")
    ExternalizedMapping(Path, SubjectID)
    -> IncludeWorkflow(Path=Extensions\PathPrefix.bonsai, Path=C:\Data\imova\webcam, SubjectID=CMD999)

    GroupWorkflow LogHarp
        Defer
            SubscribeSubject PathPrefix
            -> Add(Operand=StringProperty(Value=\)) => #1
            ExternalizedMapping(Value(DisplayName=DeviceName)) => #2
            #1, #2 -> Add(Operand=StringProperty(Value=Behavior))
            -> Add(Operand=StringProperty(Value=\))
            -> Take(Count=1)
            -> AsyncSubject DeviceFolderName

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=device.yml))
            -> Take(Count=1)
            -> AsyncSubject DeviceYamlFilename

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=Behavior))
            -> Take(Count=1)
            -> AsyncSubject BinaryFilename

            ExternalizedMapping(Name(DisplayName=DeviceEvents, Description=TaskControlBehaviorEvents))
            -> SubscribeSubject SynchronizerEvents
            -> GroupBy(KeySelector=Address)
            -> SelectMany LogRegisters
                WorkflowInput Source1
                -> AsyncSubject Register

                SubscribeSubject BinaryFilename
                -> Take(Count=1) => #3
                SubscribeSubject Register
                -> MemberSelector(Selector=Key) => #5
                #3, #5 -> Zip
                -> Format(Format={0}_{1}.bin, Selector="Item1,Item2")
                -> AsyncSubject LogName

                SubscribeSubject Register
                -> Merge => #10
                SubscribeSubject LogName
                -> PropertyMapping(FileName) => #12
                #10, #12 -> Bonsai.Harp.MessageWriter
                  FileName=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Behavior\Behavior_35.bin
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FilterType=Include
                  MessageType=nil
                -> WorkflowOutput

            ExternalizedMapping(Path(DisplayName=DeviceYamlFile))
            -> Bonsai.IO.ReadAllText(Path=BehaviorBoard.yml) => #20
            SubscribeSubject DeviceYamlFilename
            -> PropertyMapping(Path) => #22
            #20, #22 -> Bonsai.IO.WriteAllText(Path=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Behavior\device.yml, Overwrite=false, Append=false)
        -> WorkflowOutput

    SubscribeSubject Instructions
    -> ToLiteral
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #5
    IncludeWorkflow Instructions.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #7
    #5, #7 -> Bonsai.IO.CsvWriter
      FileName=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Instructions.csv
      Delimiter=\t
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject TaskEvents
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #10
    IncludeWorkflow TaskEvents.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #12
    #10, #12 -> Bonsai.IO.CsvWriter
      FileName=C:\Data\imova\microphone\CMD084\2025-10-15T10-27-18\Instructions.csv
      Delimiter=\t
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany AudioRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Audio)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Audio.AudioCapture(DeviceName="Microphone (3- USB audio CODEC)", SampleRate=44100, SampleFormat=Mono16, BufferLength=10) => #4
        SubscribeSubject BaseFileName
        -> Format(Format={0}.wav, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.wav(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #9
        #4, #9 -> Bonsai.Audio.AudioWriter(FileName=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Audio.wav, Suffix=FileCount, Buffered=true, Overwrite=false, SampleRate=44100)
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #13
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #18
        #13, #18 -> Bonsai.IO.CsvWriter(FileName=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Audio.csv, Delimiter=\t, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true) => #19
        SubscribeSubject EnableRecording
        -> Condition Disable => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #19, #21 -> TakeUntil
        -> WorkflowOutput

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany VideoRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Video)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
        -> MulticastSubject Webcam => #5
        SubscribeSubject BaseFileName
        -> Format(Format={0}.avi, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.avi(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #10
        #5, #10 -> Bonsai.Vision.VideoWriter
          FileName=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Video.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #14
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #19
        #14, #19 -> Bonsai.IO.CsvWriter(FileName=C:\Data\imova\webcam\CMD999\2025-10-29T09-27-37\Video.csv, Delimiter=\t, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true) => #20
        SubscribeSubject EnableRecording
        -> Condition Disable => #22
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #20, #22 -> TakeUntil
        -> WorkflowOutput

GroupWorkflow Subjects
    StringProperty(Value="")
    -> PublishSubject Instructions

    StringProperty(Value="We would like to hear your voice within conversation. Could you tell me over about 30 seconds, 'How you spend an average day?'")
    -> BehaviorSubject TaskEvents

    BooleanProperty(Value=true)
    -> PublishSubject EnableStart

    BooleanProperty(Value=false)
    -> PublishSubject EnableRecording

    BooleanProperty(Value=false)
    -> PublishSubject EnableRepeat

    IntProperty(Value=0)
    -> PublishSubject Timer

GroupWorkflow UI
    SubscribeSubject Instructions
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 24pt", Text="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> VisualizerMapping => #3
    BehaviorSubject<OpenCV.Net.IplImage> Webcam
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #5
    #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #7
    SubscribeSubject EnableStart
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it))
    -> Bonsai.Gui.ButtonBuilder Start(Enabled=false, Visible=false, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Start)
    -> PublishSubject Start
    -> VisualizerMapping => #12
    SubscribeSubject Timer
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt", Text=0)
    -> VisualizerMapping => #17
    SubscribeSubject EnableRecording
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it)) => #19
    #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=false, Visible=false, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #21
    Bonsai.Gui.ButtonBuilder Repeat(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Repeat)
    -> PublishSubject Repeat
    -> VisualizerMapping => #24
    Bonsai.Gui.ButtonBuilder Next(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Next)
    -> PublishSubject Next
    -> VisualizerMapping => #27
    #24, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    #12, #21, #29 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #31
    #7, #31 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=100, Y=100), Size(Width=1000, Height=600), WindowState=Maximized)

Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        First we are going to check that your face is close to the centre of the screen and we can see both shoulders.

        During all these tasks look at the camera and we will tell you when it ends.

        As before you lightly touch buttons on the screen to progress.

        When you are ready to start this block of tasks - press 'Start'
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction1)
    -> MulticastSubject TaskEvents
-> SelectMany StopRecording => #10
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=StopRecording)
    -> MulticastSubject TaskEvents

    StringProperty
    -> Take(Count=1)
    -> WorkflowOutput
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Please look at the camera with a 'neutral' expression.

        The task is only half a minute but will feel like a long time.

        Remember to try and stay as still as you can - as if you were having a passport photo taken.

        Touch 'Start' on the screen when you are ready! We will tell when the task has finished.
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction2)
    -> MulticastSubject TaskEvents
-> SelectMany FaceRest
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=30) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty(Value="\nPlease hold your pose for a passport photo!\n")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=FaceRest)
    -> MulticastSubject TaskEvents
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #13
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #15
    #13, #15 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #15
SubscribeSubject Next => #16
#15, #16 -> TakeUntil => #17
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Now please screw up your eyes tightly for 2 seconds and then open them.

        Start by looking at the camera and then screw up your eyes.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction3)
    -> MulticastSubject TaskEvents
-> SelectMany EyeClose
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=5) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value)
    -> StringProperty(Value="Screw up your eyes for 2 seconds and then open!")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EyeClose)
    -> MulticastSubject TaskEvents
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #22
SubscribeSubject Next => #23
#22, #23 -> TakeUntil => #24
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Now please 'open and close your eyes'

        Please open your eyes fully and blink deliberately.

        Touch 'Start' on the screen when you are ready! We will tell when the task has finished
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction4)
    -> MulticastSubject TaskEvents
-> SelectMany EyeBlink
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=11) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Look at the camera!

        (Open and close your EYES)
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EyeBlink)
    -> MulticastSubject TaskEvents
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #29
SubscribeSubject Next => #30
#29, #30 -> TakeUntil => #31
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        For the next task OPEN your mouth' wide

        Touch 'Start' on the screen when you are ready! We will tell when the task has finished
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction5)
    -> MulticastSubject TaskEvents
-> SelectMany MouthOpen
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=6) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (open your MOUTH)
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=MouthOpen)
    -> MulticastSubject TaskEvents
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #13
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #15
    #13, #15 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #36
SubscribeSubject Next => #37
#36, #37 -> TakeUntil => #38
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The next task is to 'OPEN and CLOSE your mouth' as wide as you can

        Please repeat this until we tell you the task has ended.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction6)
    -> MulticastSubject TaskEvents
-> SelectMany MouthOpenClose
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=11) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (open and close your MOUTH)
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=MouthOpenClose)
    -> MulticastSubject TaskEvents
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="Chose Repeat or Next Task")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #13
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #15
    #13, #15 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #43
SubscribeSubject Next => #44
#43, #44 -> TakeUntil => #45
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The next tasks asks you to 'purse your lips' as if you were going to blow a kiss to someone

        Hold the pose until we tell you that the task has finished.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction7)
    -> MulticastSubject TaskEvents
-> SelectMany "PurseLip "
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=5) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (purse your lips)
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value="PurseLip ")
    -> MulticastSubject TaskEvents
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #13
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #15
    #13, #15 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #50
SubscribeSubject Next => #51
#50, #51 -> TakeUntil => #52
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The last camera tasks asks you to 'stick out your tongue' as far as possible.

        Hold it out fully until we tell you task has finished.  This is a test of sustained hold of the tongue and lasts 10s. We will tell you when the task finishes.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=Instruction8)
    -> MulticastSubject TaskEvents
-> SelectMany TongueOut
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=11) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=TongueOut)
    -> MulticastSubject TaskEvents

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (stick out your tongue for 10 SECONDS)
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    ExternalizedMapping(Value(DisplayName=Event))
    -> StringProperty(Value=EndRepeat)
    -> MulticastSubject TaskEvents

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #13
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #15
    #13, #15 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Dsp.Range(BufferLength=10, Depth=F32, Start=0, End=0)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=256)
    -> Bonsai.Vision.ConvertToImage
    -> MulticastSubject Webcam
-> Repeat => #57
SubscribeSubject Next => #58
#57, #58 -> TakeUntil => #59
#10, #17, #24, #31, #38, #45, #52, #59 -> Concat
-> WorkflowOutput
