WorkflowBuilder(Version=2.9.0)
GroupWorkflow SynchPulse
    Timer(DueTime=PT1S)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> Take(Count=1) => #2
    BehaviorSubject<Bonsai.Harp.HarpMessage> SynchronizerCommands
    -> DelaySubscription(DueTime=PT1S) => #4
    #2, #4 -> Concat => #5
    ExternalizedMapping(PortName) => #6
    #5, #6 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject SynchronizerEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject TimeStamp

    ExternalizedMapping(Lower, Upper)
    -> Defer
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.94S)
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject SynchPulse

    PublishSubject<System.Int64> SynchPulse
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> MulticastSubject SynchronizerCommands => #17
    ExternalizedMapping(DueTime) => #18
    #17, #18 -> Delay(DueTime=PT0.01S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> MulticastSubject SynchronizerCommands

Bonsai.IO.CsvReader(FileName=subjectid.csv, SkipRows=0)
-> Take(Count=1)
-> PropertyMapping(SubjectID)
-> GroupWorkflow Logging(Description="Log all relevant streams")
    ExternalizedMapping(Path, SubjectID)
    -> IncludeWorkflow(Path=Extensions\PathPrefix.bonsai, Path=C:\Data\imova\microphone, SubjectID=CMD999)

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany AudioRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Audio)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Audio.AudioCapture(DeviceName="Microphone (3- USB audio CODEC)", SampleRate=44100, SampleFormat=Mono16, BufferLength=10) => #4
        SubscribeSubject BaseFileName
        -> Format(Format={0}.wav, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.wav(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #9
        #4, #9 -> Bonsai.Audio.AudioWriter(FileName=C:\Data\imova\microphone\CMD999\2025-10-29T09-57-01\Audio.wav, Suffix=Timestamp, Buffered=true, Overwrite=false, SampleRate=44100)
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #13
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #18
        #13, #18 -> Bonsai.IO.CsvWriter(FileName=C:\Data\imova\microphone\CMD999\2025-10-29T09-57-01\Audio.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #19
        SubscribeSubject EnableRecording
        -> Condition Disable => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #19, #21 -> TakeUntil
        -> WorkflowOutput

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany VideoRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Video)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #4
        SubscribeSubject BaseFileName
        -> Format(Format={0}.avi, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.avi(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #9
        #4, #9 -> Bonsai.Vision.VideoWriter
          FileName=C:\Data\imova\microphone\CMD999\2025-10-29T09-57-01\Video.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #13
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #18
        #13, #18 -> Bonsai.IO.CsvWriter(FileName=C:\Data\imova\microphone\CMD999\2025-10-29T09-57-01\Video.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #19
        SubscribeSubject EnableRecording
        -> Condition Disable => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #19, #21 -> TakeUntil
        -> WorkflowOutput

    SubscribeSubject Instructions
    -> ToLiteral
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #10
    IncludeWorkflow Instructions.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #12
    #10, #12 -> Bonsai.IO.CsvWriter
      FileName=C:\Data\imova\microphone\CMD084\2025-10-15T10-27-18\Instructions.csv
      Delimiter=\t
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject TaskEvents
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #15
    IncludeWorkflow TaskEvents.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #17
    #15, #17 -> Bonsai.IO.CsvWriter
      FileName=C:\Data\imova\microphone\CMD084\2025-10-15T10-27-18\Instructions.csv
      Delimiter=\t
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    GroupWorkflow LogHarp
        Defer
            SubscribeSubject PathPrefix
            -> Add(Operand=StringProperty(Value=\)) => #1
            ExternalizedMapping(Value(DisplayName=DeviceName)) => #2
            #1, #2 -> Add(Operand=StringProperty(Value=Behavior))
            -> Add(Operand=StringProperty(Value=\))
            -> Take(Count=1)
            -> AsyncSubject DeviceFolderName

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=device.yml))
            -> Take(Count=1)
            -> AsyncSubject DeviceYamlFilename

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=Behavior))
            -> Take(Count=1)
            -> AsyncSubject BinaryFilename

            ExternalizedMapping(Name(DisplayName=DeviceEvents, Description=TaskControlBehaviorEvents))
            -> SubscribeSubject SynchronizerEvents
            -> GroupBy(KeySelector=Address)
            -> SelectMany LogRegisters
                WorkflowInput Source1
                -> AsyncSubject Register

                SubscribeSubject BinaryFilename
                -> Take(Count=1) => #3
                SubscribeSubject Register
                -> MemberSelector(Selector=Key) => #5
                #3, #5 -> Zip
                -> Format(Format={0}_{1}.bin, Selector="Item1,Item2")
                -> AsyncSubject LogName

                SubscribeSubject Register
                -> Merge => #10
                SubscribeSubject LogName
                -> PropertyMapping(FileName) => #12
                #10, #12 -> Bonsai.Harp.MessageWriter
                  FileName=C:\Data\imova\microphone\CMD999\2025-10-29T09-57-22\Behavior\Behavior_35.bin
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FilterType=Include
                  MessageType=nil
                -> WorkflowOutput

            ExternalizedMapping(Path(DisplayName=DeviceYamlFile))
            -> Bonsai.IO.ReadAllText(Path=BehaviorBoard.yml) => #20
            SubscribeSubject DeviceYamlFilename
            -> PropertyMapping(Path) => #22
            #20, #22 -> Bonsai.IO.WriteAllText(Path=C:\Data\imova\microphone\CMD999\2025-10-29T09-57-22\Behavior\device.yml, Overwrite=false, Append=false)
        -> WorkflowOutput

GroupWorkflow Subjects
    BooleanProperty(Value=true)
    -> BehaviorSubject EnableStart

    StringProperty(Value=Init)
    -> BehaviorSubject Instructions

    StringProperty(Value="We would like to hear your voice within conversation. Could you tell me over about 30 seconds, 'How you spend an average day?'")
    -> BehaviorSubject TaskEvents

    BooleanProperty(Value=false)
    -> BehaviorSubject EnableRecording

    BooleanProperty(Value=false)
    -> BehaviorSubject EnableRepeat

    IntProperty(Value=0)
    -> BehaviorSubject Countdown

GroupWorkflow UI
    SubscribeSubject Instructions
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 27.9000015pt"
      Text:
        We now want to hear your voice in conversation.  Over half a minute, could you tell me:

        'How you spend an average day?'

        Fill the whole half minute with detail!

        Touch 'Start' on the screen when you are ready!
    -> VisualizerMapping => #3
    SubscribeSubject EnableStart
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it))
    -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50.1000023pt, style=Bold", Text=Start)
    -> PublishSubject Start
    -> VisualizerMapping => #8
    SubscribeSubject Countdown
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50.1000023pt", Text=0)
    -> VisualizerMapping => #13
    SubscribeSubject EnableRecording
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it)) => #15
    #13, #15 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=false
      Visible=false
      ColumnCount=2
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=100), ColumnStyle(SizeType=Absolute, Width=200))
      RowStyles=""
      CellSpans=""
    -> VisualizerMapping => #17
    Bonsai.Gui.ButtonBuilder Repeat(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Repeat)
    -> PublishSubject Repeat
    -> VisualizerMapping => #20
    Bonsai.Gui.ButtonBuilder Next(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50.1000023pt, style=Bold", Text=Next)
    -> PublishSubject Next
    -> VisualizerMapping => #23
    #20, #23 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #25
    #8, #17, #25 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #27
    #3, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Absolute, Height=800)), CellSpans="")
    -> WorkflowOutput
-> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=100, Y=100), Size(Width=1000, Height=600), WindowState=Maximized)

GroupWorkflow TaskControl
    Annotation Conversation(Text=Conversation)
    -> Timer(DueTime=PT0S)
    -> SelectMany Instruction
        SubscribeSubject Start
        -> Take(Count=1)
        -> WorkflowOutput

        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=Instruction1)
        -> MulticastSubject TaskEvents

        ExternalizedMapping(Value(DisplayName=Instructions))
        -> StringProperty
          Value:
            We now want to hear your voice in conversation.  Over half a minute, could you tell me:

            'How you spend an average day?'

            Fill the whole half minute with detail!

            Touch 'Start' on the screen when you are ready!
        -> MulticastSubject Instructions

        BooleanProperty(Value=true)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRecording

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRepeat
    -> SelectMany ConversationTask
        WorkflowInput Source1

        BooleanProperty(Value=false)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=true)
        -> MulticastSubject EnableRecording

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=conversation)
        -> MulticastSubject TaskEvents

        Timer(DueTime=PT0S, Period=PT1S) => #8
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=30) => #10
        #8, #10 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=Instructions))
        -> StringProperty(Value="\nTell us how you spend an average day!")
        -> MulticastSubject Instructions
    -> SelectMany End?_Repeat?
        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=EndRepeat)
        -> MulticastSubject TaskEvents

        StringProperty(Value="\n Please touch 'Repeat' to repeat the task or 'Next' to continue")
        -> MulticastSubject Instructions

        BooleanProperty(Value=false)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRecording

        BooleanProperty(Value=true)
        -> MulticastSubject EnableRepeat

        SubscribeSubject Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat => #5
    SubscribeSubject Next => #6
    #5, #6 -> TakeUntil => #7
    Annotation TeeMeeLaCa(Text="")
    -> Timer(DueTime=PT0S)
    -> SelectMany Instruction
        SubscribeSubject Start
        -> Take(Count=1)
        -> WorkflowOutput

        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=Instruction2)
        -> MulticastSubject TaskEvents

        BooleanProperty(Value=true)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRecording

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRepeat

        ExternalizedMapping(Value)
        -> StringProperty
          Value:
            We will now do 5 repetitions of different sounds: 'Tee', 'Mee', 'La', 'Ca'.

            Prounounce the sounds deliberately to be very clear.  [Demo, practice first].

            Each sound will come one after the other.  Touch 'Start' on the screen when you are ready!
        -> MulticastSubject Instructions
    -> SelectMany Tee
        WorkflowInput Source1

        BooleanProperty(Value=false)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=true)
        -> MulticastSubject EnableRecording

        Timer(DueTime=PT0S, Period=PT1S) => #5
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=6) => #7
        #5, #7 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=instructions))
        -> StringProperty(Value="Say 'Tee' 5 times!")
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=Tee)
        -> MulticastSubject TaskEvents
    -> SelectMany Mee
        WorkflowInput Source1

        Timer(DueTime=PT0S, Period=PT1S) => #1
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=6) => #3
        #1, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=instructions))
        -> StringProperty(Value="\n\n\n\n\n'Mee' 5 times!")
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=Mee)
        -> MulticastSubject TaskEvents
    -> SelectMany La
        WorkflowInput Source1

        Timer(DueTime=PT0S, Period=PT1S) => #1
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=6) => #3
        #1, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=instructions))
        -> StringProperty(Value="'La' 5 times!\n")
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=La)
        -> MulticastSubject TaskEvents
    -> SelectMany Ca
        WorkflowInput Source1

        Timer(DueTime=PT0S, Period=PT1S) => #1
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=6) => #3
        #1, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=instructions))
        -> StringProperty(Value="\n\n\n\n'Ca' 5 times!")
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=Ca)
        -> MulticastSubject TaskEvents
    -> SelectMany End?_Repeat?
        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=EndRepeat)
        -> MulticastSubject TaskEvents

        StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue\n")
        -> MulticastSubject Instructions

        BooleanProperty(Value=false)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRecording

        BooleanProperty(Value=true)
        -> MulticastSubject EnableRepeat

        SubscribeSubject Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat => #16
    SubscribeSubject Next => #17
    #16, #17 -> TakeUntil => #18
    Annotation EeeAah(Text="")
    -> Timer(DueTime=PT0S)
    -> SelectMany Instruction
        SubscribeSubject Start
        -> Take(Count=1)
        -> WorkflowOutput

        WorkflowInput Source1

        BooleanProperty(Value=true)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRecording

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRepeat

        ExternalizedMapping(Value)
        -> StringProperty
          Value:
            We will now ask you to hold two loud sustained notes, 'eee' and then 'aah'. [Demo] These can be any pitch (high or low), something that is comfortable for you

            Please hold each note for 5 seconds so you need a deep breath before each! [Practice 5 seconds]

            If you are ready please touch 'Start' on the screen!
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=Instruction3)
        -> MulticastSubject TaskEvents
    -> SelectMany eee
        WorkflowInput Source1

        BooleanProperty(Value=false)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=true)
        -> MulticastSubject EnableRecording

        Timer(DueTime=PT0S, Period=PT1S) => #5
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=7) => #7
        #5, #7 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=instructions))
        -> StringProperty(Value="\nTake a deep breath and then hold 'eee' for 5 seconds!")
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=eee)
        -> MulticastSubject TaskEvents
    -> SelectMany aah
        WorkflowInput Source1

        Timer(DueTime=PT0S, Period=PT1S) => #1
        ExternalizedMapping(Value(DisplayName="Time(s)"))
        -> IntProperty(Value=7) => #3
        #1, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2-it.Item1
        -> MulticastSubject Countdown
        -> TakeWhile
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=instructions))
        -> StringProperty(Value="\n\n\nTake a deep breath and hold 'aah' for 5 seconds")
        -> MulticastSubject Instructions

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=aah)
        -> MulticastSubject TaskEvents
    -> SelectMany End?_Repeat?
        WorkflowInput Source1

        ExternalizedMapping(Value(DisplayName=Event))
        -> StringProperty(Value=EndRepeat)
        -> MulticastSubject TaskEvents

        StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue\n")
        -> MulticastSubject Instructions

        BooleanProperty(Value=false)
        -> MulticastSubject EnableStart

        BooleanProperty(Value=false)
        -> MulticastSubject EnableRecording

        BooleanProperty(Value=true)
        -> MulticastSubject EnableRepeat

        SubscribeSubject Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat => #25
    SubscribeSubject Next => #26
    #25, #26 -> TakeUntil => #27
    #7, #18, #27 -> Concat
    -> WorkflowOutput
-> WorkflowOutput
