<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SynchPulse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:SynchronizeTimestamp" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>SynchronizerCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Timestamp</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimeStamp</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>2</p1:Lower>
                      <p1:Upper>5</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT4.267S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchPulse</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Int64">
              <rx:Name>SynchPulse</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DO0</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchronizerCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DO0</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchronizerCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>subjectid.csv</io:FileName>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SubjectID" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Description>Log all relevant streams</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
              <Property Name="SubjectID" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PathPrefix.bonsai">
              <Path>C:\Data\imova\sitSuppress</Path>
              <SubjectID>jfrazao</SubjectID>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AudioRecorder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="FileName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Audio</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioCapture">
                      <al:DeviceName>Microphone (3- USB audio CODEC)</al:DeviceName>
                      <al:SampleRate>44100</al:SampleRate>
                      <al:SampleFormat>Mono16</al:SampleFormat>
                      <al:BufferLength>10</al:BufferLength>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.wav</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
                    <Name>Audio.wav</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioWriter">
                      <al:FileName>C:\Data\sitSuppress\2025-10-07T12-48-13\Audio.wav</al:FileName>
                      <al:Suffix>FileCount</al:Suffix>
                      <al:Buffered>true</al:Buffered>
                      <al:Overwrite>false</al:Overwrite>
                      <al:SampleRate>44100</al:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
                    <Name>Audio.csv</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\sitSuppress\2025-10-07T12-48-13\Audio.csv</io:FileName>
                    <io:Delimiter>\t</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Disable</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="19" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToLiteral" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>Instructions.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\sitSuppress\jfrazao\2025-11-17T20-41-25\Instructions.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Timestamp.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>TaskEvents.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\imova\sitSuppress\jfrazao\2025-11-17T20-41-25\TaskEvents.csv</io:FileName>
              <io:Delimiter>\t</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:Defer">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>\</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="DeviceName" />
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>Behavior</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>\</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceFolderName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceFolderName</Name>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>device.yml</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceYamlFilename</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceFolderName</Name>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>Behavior</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>BinaryFilename</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="DeviceEvents" Description="TaskControlBehaviorEvents" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SynchronizerEvents</Name>
                        </Expression>
                        <Expression xsi:type="rx:GroupBy">
                          <rx:KeySelector>Address</rx:KeySelector>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>LogRegisters</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Register</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>BinaryFilename</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Register</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}_{1}.bin</Format>
                                <Selector>Item1,Item2</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>LogName</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Register</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LogName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:MessageWriter">
                                  <harp:FileName>C:\Data\imova\sitSuppress\CMD348\2025-10-15T13-17-51\Behavior\Behavior_35.bin</harp:FileName>
                                  <harp:Suffix>None</harp:Suffix>
                                  <harp:Buffered>true</harp:Buffered>
                                  <harp:Overwrite>false</harp:Overwrite>
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="13" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Path" DisplayName="DeviceYamlFile" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:ReadAllText">
                            <io:Path>BehaviorBoard.yml</io:Path>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceYamlFilename</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:WriteAllText">
                            <io:Path>C:\Data\imova\sitSuppress\jfrazao\2025-11-17T20-41-25\Behavior\device.yml</io:Path>
                            <io:Overwrite>false</io:Overwrite>
                            <io:Append>false</io:Append>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="23" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Subjects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Init</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>We would like to hear your voice within conversation. Could you tell me over about 30 seconds, 'How you spend an average day?'</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TaskEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Countdown</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 27.9000015pt</gui:Font>
              <gui:Text>We would like to hear your voice within conversation. Could you tell me over about 30 seconds, 'How you spend an average day?'</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Start</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50.1000023pt, style=Bold</gui:Font>
              <gui:Text>Start</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Countdown</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50.1000023pt</gui:Font>
              <gui:Text>0</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>100</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Width>200</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Repeat</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50pt, style=Bold</gui:Font>
              <gui:Text>Repeat</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Repeat</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Next</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 50.1000023pt, style=Bold</gui:Font>
              <gui:Text>Next</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Next</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Height>800</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="28" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="26" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="26" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location>
          <ui:X>100</ui:X>
          <ui:Y>100</ui:Y>
        </ui:Location>
        <ui:Size>
          <ui:Width>1000</ui:Width>
          <ui:Height>600</ui:Height>
        </ui:Size>
        <ui:WindowState>Maximized</ui:WindowState>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TaskControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>SitSuppress</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Instruction</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>CONTROL NOW WITH QTM OPERATOR!!

To record audio during SitSuppress task  

Main screen should be off, use mirror monitor on desk.

1.  Load QTM task
2.  Load Bonsai workflow
3.  Start Bonsai task
4.  Press QTM  trigger

VERBALLY TELL PARTICIPANT WHEN 30 SECONDS IS UP

5.  Stop after QTM task has finished
</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Event" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Instruction1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TaskEvents</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SitSuppress</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>150</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>stop manually as per QTM timing</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Event" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>SitSuppress</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TaskEvents</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>End?_Repeat?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>
 Please touch 'Repeat' to repeat the task or 'Next' to continue</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Event" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>EndRepeat</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TaskEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repeat</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Next</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>