<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:CameraDevice.Schema;assembly=Extensions"
                 xmlns:aeon-video="clr-namespace:Aeon.Video;assembly=Aeon.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Path" Description="The root folder on which to log all data." />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="io:GetFiles,sys:String">
        <MemberName>Path</MemberName>
        <Value>../data/calibration/2026-03-26</Value>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PathPrefix</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera1FrequencyPayload">
                <beh:Camera1Frequency>20</beh:Camera1Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>DI3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput1</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StartRecording</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StartRecording</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartRecording</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StopRecording</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT30S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartRecording</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedCamera1Frame" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraTriggerEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFileSystemEntries">
          <io:Path>../device_configs</io:Path>
          <io:SearchPattern>*.json</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CreateDevices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:ReadAllText">
                      <io:Path>../named_device_configs\CameraTopRight.json</io:Path>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:DeserializeFromJson">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:CameraDevice" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Capture</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraDevice</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraTriggerEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraDevice</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExposureTime" Selector="Exposure" />
                <Property Name="Gain" Selector="Gain" />
                <Property Name="Index" Selector="DeviceIdx" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon-video:SpinnakerCapture">
                <spk:Index>4</spk:Index>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
                <aeon-video:ExposureTime>1000</aeon-video:ExposureTime>
                <aeon-video:Gain>20</aeon-video:Gain>
                <aeon-video:Binning>1</aeon-video:Binning>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>CameraDevice</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
                <Format>data/{0}.avi</Format>
                <Selector>it.DeviceName</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>data/Camera7.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>2</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraDevice</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CameraCaptureStreams</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ImageVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>6</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraCaptureStreams</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceIdx</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>7</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>4</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="32" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="32" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="32" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="32" Label="Source4" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="32" Label="Source5" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="32" Label="Source6" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="32" Label="Source7" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source8" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CameraStream" DisplayName="SelectCameraStream" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:SelectCameraStream">
          <p2:CameraStream>CameraBottomLeft</p2:CameraStream>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>SelectedCameraStreamName</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraCaptureStreams</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FilterStream</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.DeviceName</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SelectedCameraStreamName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FilteredCameraStream</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.DeviceName</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PathPrefix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/Intrinsics/{1}.avi</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SelectedCameraVideoName</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>RecordCameraStreams</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilteredCameraStream</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SelectedCameraVideoName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>../data/calibration/2026-03-26/CameraBottomLeft.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>20</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RecordingControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartRecording</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartRecording</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>