<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Create a common path prefix to be used by all loggers</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Path" Description="The root folder on which to log all data." />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="io:GetFiles,sys:String">
        <MemberName>Path</MemberName>
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcDateTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:FormatDate" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SubjectID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{2}\{1}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>PathPrefix</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>