<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>WintabDataFrame</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NormalPressure</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt32">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Size" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="drw:CreateCanvas,p1:Size">
        <MemberName>Size</MemberName>
        <Value>
          <Width>3840</Width>
          <Height>2160</Height>
        </Value>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Height</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(it.Item1.X,it.Item2 - it.Item1.Y as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="X" />
          <Property Name="Y" Selector="Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint">
          <cv:X>2053</cv:X>
          <cv:Y>810</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>3840</drw:Width>
            <drw:Height>2160</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>255</drw:Val0>
            <drw:Val1>255</drw:Val1>
            <drw:Val2>255</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:PenDigitizer" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TabletCanvas</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="9" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>