WorkflowBuilder(Version=2.9.0)
GroupWorkflow SynchPulse
    Timer(DueTime=PT1S)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> Take(Count=1) => #2
    BehaviorSubject<Bonsai.Harp.HarpMessage> SynchronizerCommands
    -> DelaySubscription(DueTime=PT1S) => #4
    #2, #4 -> Concat => #5
    ExternalizedMapping(PortName) => #6
    #5, #6 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject SynchronizerEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject TimeStamp

    ExternalizedMapping(Lower, Upper)
    -> Defer
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT4.452S)
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject SynchPulse

    PublishSubject<System.Int64> SynchPulse
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> MulticastSubject SynchronizerCommands => #17
    ExternalizedMapping(DueTime) => #18
    #17, #18 -> Delay(DueTime=PT0.01S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> MulticastSubject SynchronizerCommands

GroupWorkflow Logging(Description="Log all relevant streams")
    ExternalizedMapping(Path)
    -> IncludeWorkflow(Path=Extensions\PathPrefix.bonsai, Path=C:\Data\computeMD\tablet)

    GroupWorkflow LogHarp
        Defer
            SubscribeSubject PathPrefix
            -> Add(Operand=StringProperty(Value=\)) => #1
            ExternalizedMapping(Value(DisplayName=DeviceName)) => #2
            #1, #2 -> Add(Operand=StringProperty(Value=Behavior))
            -> Add(Operand=StringProperty(Value=\))
            -> Take(Count=1)
            -> AsyncSubject DeviceFolderName

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=device.yml))
            -> Take(Count=1)
            -> AsyncSubject DeviceYamlFilename

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=Behavior))
            -> Take(Count=1)
            -> AsyncSubject BinaryFilename

            ExternalizedMapping(Name(DisplayName=DeviceEvents, Description=TaskControlBehaviorEvents))
            -> SubscribeSubject SynchronizerEvents
            -> GroupBy(KeySelector=Address)
            -> SelectMany LogRegisters
                WorkflowInput Source1
                -> AsyncSubject Register

                SubscribeSubject BinaryFilename
                -> Take(Count=1) => #3
                SubscribeSubject Register
                -> MemberSelector(Selector=Key) => #5
                #3, #5 -> Zip
                -> Format(Format={0}_{1}.bin, Selector="Item1,Item2")
                -> AsyncSubject LogName

                SubscribeSubject Register
                -> Merge => #10
                SubscribeSubject LogName
                -> PropertyMapping(FileName) => #12
                #10, #12 -> Bonsai.Harp.MessageWriter
                  FileName=C:\Data\computeMD\webcam\2025-08-18T14-01-57\Behavior\Behavior_122.bin
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FilterType=Include
                  MessageType=nil
                -> WorkflowOutput

            ExternalizedMapping(Path(DisplayName=DeviceYamlFile))
            -> Bonsai.IO.ReadAllText(Path=BehaviorBoard.yml) => #20
            SubscribeSubject DeviceYamlFilename
            -> PropertyMapping(Path) => #22
            #20, #22 -> Bonsai.IO.WriteAllText(Path=C:\Data\computeMD\webcam\2025-08-18T14-01-57\Behavior\device.yml, Overwrite=false, Append=false)
        -> WorkflowOutput

    Bonsai.Wintab.WintabCapture(SystemCursor=false)
    -> PublishSubject WintabDataFrame
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #5
    IncludeWorkflow keystrokes.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #7
    #5, #7 -> Bonsai.IO.CsvWriter(FileName=C:\Data\computeMD\webcam\2025-08-18T14-01-57\keystrokes.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="")
    -> WorkflowOutput

    SubscribeSubject Instructions
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #11
    IncludeWorkflow Instructions.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #13
    #11, #13 -> Bonsai.IO.CsvWriter(FileName=C:\Data\computeMD\webcam\2025-08-18T14-01-57\Instructions.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput

GroupWorkflow Subjects
    StringProperty(Value="")
    -> PublishSubject Instructions

    BooleanProperty(Value=true)
    -> PublishSubject EnableStart

    BooleanProperty(Value=false)
    -> PublishSubject EnableRecording

    BooleanProperty(Value=false)
    -> PublishSubject EnableRepeat

    IntProperty(Value=0)
    -> PublishSubject Timer

GroupWorkflow UI
    SubscribeSubject Instructions
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 24pt"
      Text:
        Now with the RIGHT hand

        Draw both spirals starting at the centre and moving outwards.

        Keep your hand / arm OFF the tablet while you draw

        Touch 'Start' when you are ready!
    -> VisualizerMapping => #3
    BehaviorSubject<OpenCV.Net.IplImage> TabletCanvas
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #5
    #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=60)), CellSpans="")
    -> VisualizerMapping => #7
    SubscribeSubject EnableStart
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it))
    -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Start)
    -> PublishSubject Start
    -> VisualizerMapping => #12
    SubscribeSubject Timer
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt", Text=0)
    -> VisualizerMapping => #17
    SubscribeSubject EnableRecording
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it)) => #19
    #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=false
      Visible=false
      ColumnCount=2
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=100), ColumnStyle(SizeType=Absolute, Width=200))
      RowStyles=""
      CellSpans=""
    -> VisualizerMapping => #21
    Bonsai.Gui.ButtonBuilder Repeat(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Repeat)
    -> PublishSubject Repeat
    -> VisualizerMapping => #24
    Bonsai.Gui.ButtonBuilder Next(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Next)
    -> PublishSubject Next
    -> VisualizerMapping => #27
    #24, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    #12, #21, #29 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #31
    #7, #31 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> Bonsai.Design.VisualizerWindow(Visible=nil, Location(X=100, Y=100), Size(Width=1000, Height=600), WindowState=Maximized)

Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty
      Value:
        We will now complete tasks with a digitising tablet.

        The pen will write to the screen, NOT the paper.

        We will change the sheet of paper for each task.

        Touch 'Start' to continue!
    -> MulticastSubject Instructions
-> SelectMany DigitizerHabituation
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=15) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\PenDigitizer.bonsai, Size(Width=3840, Height=2160))

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty(Value="\nPlease test writing!")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #9
SubscribeSubject Next => #10
#9, #10 -> TakeUntil => #11
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    IncludeWorkflow(Path=Extensions\clearCanvas.bonsai)

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty
      Value:
        On each line please write:

        'The quick brown fox jumps over the lazy dog'

        Start a new line if you finish the phrase

        You have half a minute

        Touch 'Start' when you are ready
    -> MulticastSubject Instructions
-> SelectMany WritingTask
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=30) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\PenDigitizer.bonsai, Size(Width=3840, Height=2160))

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty(Value="\nPlease write!")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #16
SubscribeSubject Next => #17
#16, #17 -> TakeUntil => #18
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    IncludeWorkflow(Path=Extensions\clearCanvas.bonsai)

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty
      Value:
        Now with the RIGHT hand

        Draw both spirals starting at the centre and moving outwards.

        Keep your hand / arm OFF the tablet while you draw

        Touch 'Start' when you are ready!
    -> MulticastSubject Instructions
-> SelectMany ArchimedesR
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=30) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\PenDigitizer.bonsai, Size(Width=3840, Height=2160))

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty(Value="\nTrace the spirals!")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #23
SubscribeSubject Next => #24
#23, #24 -> TakeUntil => #25
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty
      Value:
        Now with the LEFT hand

        Draw both spirals starting at the centre and moving outwards.

        Keep your hand / arm OFF the tablet while you draw

        Touch 'Start' when you are ready!
    -> MulticastSubject Instructions

    IncludeWorkflow(Path=Extensions\clearCanvas.bonsai)
-> SelectMany ArchimedesL
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=30) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty(Value="\nTrace the spirals!")
    -> MulticastSubject Instructions

    IncludeWorkflow(Path=Extensions\PenDigitizer.bonsai, Size(Width=3840, Height=2160))
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #30
SubscribeSubject Next => #31
#30, #31 -> TakeUntil => #32
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty
      Value:
        With the RIGHT hand

        Please draw 3 horizontal lines connecting the dot

        Then 3 vertical lines connecting the dots

        Keep your hand / arm OFF the tablet while you draw

        Touch 'Start' when you are ready!
    -> MulticastSubject Instructions

    IncludeWorkflow(Path=Extensions\clearCanvas.bonsai)
-> SelectMany DrawLinesR
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=20) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty(Value="\nTrace the lines!")
    -> MulticastSubject Instructions

    IncludeWorkflow(Path=Extensions\PenDigitizer.bonsai, Size(Width=3840, Height=2160))
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #37
SubscribeSubject Next => #38
#37, #38 -> TakeUntil => #39
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty
      Value:
        With the LEFT hand

        Please draw 3 horizontal lines connecting the dot

        Then 3 vertical lines connecting the dots

        Keep your hand / arm OFF the tablet while you draw

        Touch 'Start' when you are ready!
    -> MulticastSubject Instructions

    IncludeWorkflow(Path=Extensions\clearCanvas.bonsai)
-> SelectMany DrawLinesL
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=20) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=Instructions))
    -> StringProperty(Value="\nTrace the lines!")
    -> MulticastSubject Instructions

    IncludeWorkflow(Path=Extensions\PenDigitizer.bonsai, Size(Width=3840, Height=2160))
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat the task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #44
SubscribeSubject Next => #45
#44, #45 -> TakeUntil => #46
#39, #46 -> Concat => #47
#32, #47 -> Concat => #48
#25, #48 -> Concat => #49
#18, #49 -> Concat => #50
#11, #50 -> Concat
-> WorkflowOutput
