WorkflowBuilder(Version=2.9.0)
GroupWorkflow SynchPulse
    Timer(DueTime=PT1S)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> Take(Count=1) => #2
    BehaviorSubject<Bonsai.Harp.HarpMessage> SynchronizerCommands
    -> DelaySubscription(DueTime=PT1S) => #4
    #2, #4 -> Concat => #5
    ExternalizedMapping(PortName) => #6
    #5, #6 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject SynchronizerEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject TimeStamp

    ExternalizedMapping(Lower, Upper)
    -> Defer
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT4.846S)
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject SynchPulse

    PublishSubject<System.Int64> SynchPulse
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> MulticastSubject SynchronizerCommands => #17
    ExternalizedMapping(DueTime) => #18
    #17, #18 -> Delay(DueTime=PT0.01S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> MulticastSubject SynchronizerCommands

GroupWorkflow Logging(Description="Log all relevant streams")
    ExternalizedMapping(Path)
    -> IncludeWorkflow(Path=Extensions\PathPrefix.bonsai, Path=C:\Data\computeMD\webcam)

    GroupWorkflow LogHarp
        Defer
            SubscribeSubject PathPrefix
            -> Add(Operand=StringProperty(Value=\)) => #1
            ExternalizedMapping(Value(DisplayName=DeviceName)) => #2
            #1, #2 -> Add(Operand=StringProperty(Value=Behavior))
            -> Add(Operand=StringProperty(Value=\))
            -> Take(Count=1)
            -> AsyncSubject DeviceFolderName

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=device.yml))
            -> Take(Count=1)
            -> AsyncSubject DeviceYamlFilename

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=Behavior))
            -> Take(Count=1)
            -> AsyncSubject BinaryFilename

            ExternalizedMapping(Name(DisplayName=DeviceEvents, Description=TaskControlBehaviorEvents))
            -> SubscribeSubject SynchronizerEvents
            -> GroupBy(KeySelector=Address)
            -> SelectMany LogRegisters
                WorkflowInput Source1
                -> AsyncSubject Register

                SubscribeSubject BinaryFilename
                -> Take(Count=1) => #3
                SubscribeSubject Register
                -> MemberSelector(Selector=Key) => #5
                #3, #5 -> Zip
                -> Format(Format={0}_{1}.bin, Selector="Item1,Item2")
                -> AsyncSubject LogName

                SubscribeSubject Register
                -> Merge => #10
                SubscribeSubject LogName
                -> PropertyMapping(FileName) => #12
                #10, #12 -> Bonsai.Harp.MessageWriter
                  FileName=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Behavior\Behavior_35.bin
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FilterType=Include
                  MessageType=nil
                -> WorkflowOutput

            ExternalizedMapping(Path(DisplayName=DeviceYamlFile))
            -> Bonsai.IO.ReadAllText(Path=BehaviorBoard.yml) => #20
            SubscribeSubject DeviceYamlFilename
            -> PropertyMapping(Path) => #22
            #20, #22 -> Bonsai.IO.WriteAllText(Path=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Behavior\device.yml, Overwrite=false, Append=false)
        -> WorkflowOutput

    SubscribeSubject Instructions
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #4
    IncludeWorkflow Instructions.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #6
    #4, #6 -> Bonsai.IO.CsvWriter(FileName=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Instructions.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany AudioRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Audio)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Audio.AudioCapture(DeviceName="Microphone (3- USB audio CODEC)", SampleRate=44100, SampleFormat=Mono16, BufferLength=10) => #4
        SubscribeSubject BaseFileName
        -> Format(Format={0}.wav, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.wav(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #9
        #4, #9 -> Bonsai.Audio.AudioWriter(FileName=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Audio.wav, Suffix=Timestamp, Buffered=true, Overwrite=false, SampleRate=44100)
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Timestamp => #13
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #18
        #13, #18 -> Bonsai.IO.CsvWriter(FileName=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Audio.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #19
        SubscribeSubject EnableRecording
        -> Condition Disable => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #19, #21 -> TakeUntil
        -> WorkflowOutput

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany VideoRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Video)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
        -> MulticastSubject Webcam => #5
        SubscribeSubject BaseFileName
        -> Format(Format={0}.avi, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.avi(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #10
        #5, #10 -> Bonsai.Vision.VideoWriter
          FileName=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Video.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Timestamp => #14
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #19
        #14, #19 -> Bonsai.IO.CsvWriter(FileName=C:\Data\computeMD\webcam\2025-09-09T17-22-20\Video.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #20
        SubscribeSubject EnableRecording
        -> Condition Disable => #22
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #20, #22 -> TakeUntil
        -> WorkflowOutput

GroupWorkflow Subjects
    StringProperty(Value="")
    -> PublishSubject Instructions

    BooleanProperty(Value=true)
    -> PublishSubject EnableStart

    BooleanProperty(Value=false)
    -> PublishSubject EnableRecording

    BooleanProperty(Value=false)
    -> PublishSubject EnableRepeat

    IntProperty(Value=0)
    -> PublishSubject Timer

GroupWorkflow UI
    SubscribeSubject Instructions
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 24pt", Text="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> VisualizerMapping => #3
    BehaviorSubject<OpenCV.Net.IplImage> Webcam
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #5
    #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #7
    SubscribeSubject EnableStart
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it))
    -> Bonsai.Gui.ButtonBuilder Start(Enabled=false, Visible=false, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Start)
    -> PublishSubject Start
    -> VisualizerMapping => #12
    SubscribeSubject Timer
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt", Text=0)
    -> VisualizerMapping => #17
    SubscribeSubject EnableRecording
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it)) => #19
    #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=false, Visible=false, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #21
    Bonsai.Gui.ButtonBuilder Repeat(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Repeat)
    -> PublishSubject Repeat
    -> VisualizerMapping => #24
    Bonsai.Gui.ButtonBuilder Next(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 50pt, style=Bold", Text=Next)
    -> PublishSubject Next
    -> VisualizerMapping => #27
    #24, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    #12, #21, #29 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #31
    #7, #31 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=100, Y=100), Size(Width=1000, Height=600), WindowState=Maximized)

Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        First we are going to check that your image is in the centre.

        During these tasks look at the camera.

        You need to lightly touch buttons on the screen to progress.

        Lets practice this now. Press 'Start'!
    -> MulticastSubject Instructions
-> SelectMany StopRecording => #7
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    StringProperty
    -> Take(Count=1)
    -> WorkflowOutput
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The first task is to close your eyes for 2 seconds and then open them.

        Start by looking at the camera and then close your eyes.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany EyeClose
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=4) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value)
    -> StringProperty(Value="\nClose your eyes for 2 seconds and then open!")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #12
SubscribeSubject Next => #13
#12, #13 -> TakeUntil => #14
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        In the next task we ask you to 'open and close your eyes'

        Please repeat blinking until the task ends.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany EyeBlink
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=6) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Look at the camera!

        (Open and close your EYES)
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #19
SubscribeSubject Next => #20
#19, #20 -> TakeUntil => #21
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        For the next task 'open your mouth' wide

        Please hold open until the task ends.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany MouthOpen
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=3) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (open your MOUTH)
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #26
SubscribeSubject Next => #27
#26, #27 -> TakeUntil => #28
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The next task is 'open and close your mouth' as wide as you can

        Please repeat this until the task ends.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany MouthOpenClose
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=6) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (open and close your MOUTH)
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="Chose Repeat or Next Task")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #33
SubscribeSubject Next => #34
#33, #34 -> TakeUntil => #35
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The next tasks asks you to  'purse your lips' as if you were going to blow a kiss to someone

        Hold the pose for a few seconds

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany "PurseLip "
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=4) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (purse your lips)
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #40
SubscribeSubject Next => #41
#40, #41 -> TakeUntil => #42
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Now we want you look at the camera in response / in a natural pose until the timer ends.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany FaceRest
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=30) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty(Value="\nPlease look at camera 'in repose' a neutral pose!\n")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #47
SubscribeSubject Next => #48
#47, #48 -> TakeUntil => #49
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        The last camera tasks asks you to 'stick out your tongue' as far as possible.

        Hold it out fully until the task ends.

        Touch 'Start' on the screen when you are ready!
    -> MulticastSubject Instructions
-> SelectMany TongueOut
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=11) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Look at the camera!

        (stick out your tongue for 10 SECONDS)
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="\nPlease touch 'Repeat' to repeat task or 'Next' to continue\n")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #54
SubscribeSubject Next => #55
#54, #55 -> TakeUntil => #56
#7, #14, #21, #28, #35, #42, #49, #56 -> Concat
-> WorkflowOutput
