<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Description>Log all relevant streams</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PathPrefix.bonsai">
              <Path>C:\Data\IMOVA\MicrophoneSpeech</Path>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AudioRecorder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="FileName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Audio</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioCapture">
                      <al:DeviceName>Microphone Array (Realtek(R) Au</al:DeviceName>
                      <al:SampleRate>44100</al:SampleRate>
                      <al:SampleFormat>Mono16</al:SampleFormat>
                      <al:BufferLength>10</al:BufferLength>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.wav</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
                    <Name>Audio.wav</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioWriter">
                      <al:FileName>C:\Data\IMOVA\MicrophoneSpeech\2025-06-27T08-41-32\Audio.wav</al:FileName>
                      <al:Suffix>Timestamp</al:Suffix>
                      <al:Buffered>true</al:Buffered>
                      <al:Overwrite>false</al:Overwrite>
                      <al:SampleRate>44100</al:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
                    <Name>Audio.csv</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\IMOVA\MicrophoneSpeech\2025-06-27T08-41-32\Audio.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Disable</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="19" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>VideoRecorder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="FileName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Video</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CameraCapture">
                      <cv:Index>0</cv:Index>
                      <cv:CaptureProperties />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.avi</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
                    <Name>Video.avi</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\Data\IMOVA\MicrophoneSpeech\2025-06-27T08-41-32\Video.avi</cv:FileName>
                      <cv:Suffix>Timestamp</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaseFileName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
                    <Name>Video.csv</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\IMOVA\MicrophoneSpeech\2025-06-27T08-41-32\Video.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Disable</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="19" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Name>Instructions.csv</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\IMOVA\MicrophoneSpeech\2025-06-27T08-41-32\Instructions.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Subjects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>We would like to hear your voice within conversation. Could you tell me over about 30 seconds, 'How you spend an average day?'</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EnableRepeat</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Countdown</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Instructions</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 27.8571434pt</gui:Font>
              <gui:Text>Chose Repeat or Next Task</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableStart</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Start</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 26.1428585pt, style=Bold</gui:Font>
              <gui:Text>Start</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Countdown</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 48pt</gui:Font>
              <gui:Text>0</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EnableRecording</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" Selector="it" />
                <Property Name="Enabled" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>100</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Width>200</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Repeat</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 26.1428585pt, style=Bold</gui:Font>
              <gui:Text>Repeat</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Repeat</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Finish</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 26.1428585pt, style=Bold</gui:Font>
              <gui:Text>Finish</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Finish</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 27.8571434pt</gui:Font>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Height>400</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="28" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="26" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="26" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location>
          <ui:X>100</ui:X>
          <ui:Y>100</ui:Y>
        </ui:Location>
        <ui:Size>
          <ui:Width>1000</ui:Width>
          <ui:Height>600</ui:Height>
        </ui:Size>
        <ui:WindowState>Normal</ui:WindowState>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TaskControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>Conversation</Name>
              <Text><![CDATA[Conversation]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Instruction</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>We would like to hear your voice within conversation. 
Could you tell me over about 30 seconds, 
'How you spend an average day?'</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ConversationTask</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>30</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Could you tell me over about 30 seconds,
'How you spend an average day?'</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>End?_Repeat?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Chose Repeat or Next Task</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repeat</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Finish</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>TeeMeeLaCa</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Instruction</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>We will now do five repetitions of different consonants 
(Tee, Mee, La, Ca). 
Lets practice with the first and then start the task.</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Tee</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Please say 'Tee' five times</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Mee</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Please say 'Mee' five times</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>La</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Please say 'La' five times</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Ca</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Please say 'Ca' five times</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>End?_Repeat?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Chose Repeat or Next Task</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repeat</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Finish</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Finish</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>EeeAah</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Instruction</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Please hold note eee for five seconds 
and then aah for 5 seconds,</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>eee</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Please hold a note singing 'e'</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>aah</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Time(s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2-it.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Countdown</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="instructions" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Now hold the 'a' note singing</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>End?_Repeat?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Chose Repeat or Next Task</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Instructions</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRecording</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableRepeat</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repeat</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Finish</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Finish</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="28" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="28" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source3" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>